CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:30
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:Well(?P<Well>.*)_ChannelAGP,DNA_Seq0000_#(?P<Position>.*)_(?P<Channel>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "C2")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "C1")
    Name to assign these images:F_ACTIN
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:DNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:F_ACTIN
    Name the output image:IllumACTIN
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:DNA
    Name the output image:CorrDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:F_ACTIN
    Name the output image:CorrACTIN
    Select the illumination function:IllumACTIN
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:CorrACTIN
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:100
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:CorrDNA
    Name the primary objects to be identified:NUCLEI
    Typical diameter of objects, in pixel units (Min,Max):15,70
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.30,0.9
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:NUCLEI
    Name the objects to be identified:FACTIN
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:EnhanceOrSuppressFeatures
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    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNUCLEI
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.06,0.95
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    Log transform before thresholding?:Yes
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    Size of adaptive window:100
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    Thresholding method:Minimum Cross-Entropy

MeasureGranularity:[module_num:11|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
    Select images to measure:CorrDNA
    Measure within objects?:Yes
    Select objects to measure:FilteredNUCLEI
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureGranularity:[module_num:12|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
    Select images to measure:CorrACTIN
    Measure within objects?:Yes
    Select objects to measure:FACTIN
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureImageAreaOccupied:[module_num:13|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
    Measure the area occupied by:Objects
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    Select object sets to measure:FACTIN, FilteredNUCLEI

MeasureImageIntensity:[module_num:14|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
    Select images to measure:CorrACTIN, CorrDNA
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
MeasureObjectIntensity:[module_num:15|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
    Select images to measure:CorrDNA
    Select objects to measure:FilteredNUCLEI

MeasureObjectIntensity:[module_num:16|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
    Select images to measure:CorrACTIN
    Select objects to measure:FACTIN

MeasureObjectIntensityDistribution:[module_num:17|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
    Select images to measure:CorrDNA
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:FilteredNUCLEI
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectIntensityDistribution:[module_num:18|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
    Select images to measure:CorrACTIN
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:FACTIN
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectNeighbors:[module_num:19|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
    Select objects to measure:FilteredNUCLEI
    Select neighboring objects to measure:FilteredNUCLEI
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectSizeShape:[module_num:20|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
    Select object sets to measure:FACTIN, FilteredNUCLEI
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:21|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
    Select images to measure:CorrDNA
    Select objects to measure:FilteredNUCLEI
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

MeasureTexture:[module_num:22|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
    Select images to measure:CorrACTIN
    Select objects to measure:FACTIN
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

OverlayOutlines:[module_num:23|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CorrDNA
    Name the output image:DNA_outlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:blue
    Select objects to display:FilteredNUCLEI

OverlayOutlines:[module_num:24|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CorrACTIN
    Name the output image:ACTIN_outlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:yellow
    Select objects to display:FACTIN

SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:CorrDNA
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:A
    Saved file format:tiff
    Output file location:Elsewhere...|D:\\TL_10_005\\PDMS samples\\Output folder images with segmentations
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:CorrACTIN
    Select method for constructing file names:From image filename
    Select image name for file prefix:F_ACTIN
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:A
    Saved file format:tiff
    Output file location:Elsewhere...|D:\\TL_10_005\\PDMS samples\\Output folder images with segmentations
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:DNA_outlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:B
    Saved file format:tiff
    Output file location:Elsewhere...|D:\\TL_10_005\\PDMS samples\\Output folder images with segmentations
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:ACTIN_outlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:F_ACTIN
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:B
    Saved file format:tiff
    Output file location:Elsewhere...|D:\\TL_10_005\\PDMS samples\\Output folder images with segmentations
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToDatabase:[module_num:29|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Elsewhere...|D:\\TL_10_005\\PDMS samples\\Output folder for data
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:96
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    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:FilteredNUCLEI
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:30|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\TL_10_005\\PDMS samples\\Output folder for data
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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